PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Data filename = u'data/%s_%s_' % (expName, expInfo['date'])
  Experiment info = {'Sex assigned at birth': "'M','F'", 'Age in years': '', 'Highest level of education': "'GCSE','A-Levels','Undergraduate','Masters','PhD'"}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SimpleWMEEG
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for agreeing to take part in this experiment.

        There are two parts to the experiment

        The first is a series of questionnaires about your mental health.

        The second section is a task where you will be asked to indicate the direction of a tilted line.


        Press SPACE to continue
    CodeComponent File_Selector
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        excel = ' '
        Aexcel = ''
      End Routine:
        if ShapeSelector == 0:
            excel = "0.xlsx"
            Aexcel = "A0.xlsx"
        if ShapeSelector == 1:
            excel = "1.xlsx"
            Aexcel = "A1.xlsx"
        if ShapeSelector == 2:
            excel = "2.xlsx"
            Aexcel = "A2.xlsx"
        if ShapeSelector == 3:
            excel = "3.xlsx"
            Aexcel = "A3.xlsx"
        if ShapeSelector == 4:
            excel = "4.xlsx"
            Aexcel = "A4.xlsx"
        if ShapeSelector == 5:
            excel = "5.xlsx"
            Aexcel = "A5.xlsx"
        if ShapeSelector == 6:
            excel = "6.xlsx"
            Aexcel = "A6.xlsx"
        if ShapeSelector == 7:
            excel = "7.xlsx"
            Aexcel = "A7.xlsx"
        if ShapeSelector == 8:
            excel = "8.xlsx"
            Aexcel = "A8.xlsx"
        if ShapeSelector == 9:
            excel = "9.xlsx"
            Aexcel = "A9.xlsx"
        if ShapeSelector == 10:
            excel = "10.xlsx"
            Aexcel = "A10.xlsx"
        if ShapeSelector == 11:
            excel = "11.xlsx"
            Aexcel = "A11.xlsx"
        if ShapeSelector == 12:
            excel = "12.xlsx"
            Aexcel = "A12.xlsx"
        if ShapeSelector == 13:
            excel = "13.xlsx"
            Aexcel = "A13.xlsx"
        if ShapeSelector == 14:
            excel = "14.xlsx"
            Aexcel = "A14.xlsx"
        if ShapeSelector == 15:
            excel = "15.xlsx"
            Aexcel = "A15.xlsx"
        if ShapeSelector == 16:
            excel = "16.xlsx"
            Aexcel = "A16.xlsx"
        if ShapeSelector == 17:
            excel = "17.xlsx"
            Aexcel = "A17.xlsx"
        if ShapeSelector == 18:
            excel = "18.xlsx"
            Aexcel = "A18.xlsx"
        if ShapeSelector == 19:
            excel = "19.xlsx"
            Aexcel = "A19.xlsx"
        if ShapeSelector == 20:
            excel = "20.xlsx"
            Aexcel = "A20.xlsx"
        if ShapeSelector == 21:
            excel = "21.xlsx"
            Aexcel = "A21.xlsx"
        if ShapeSelector == 22:
            excel = "22.xlsx"
            Aexcel = "A22.xlsx"
        if ShapeSelector == 23:
            excel = "23.xlsx"
            Aexcel = "A23.xlsx"
        if ShapeSelector == 24:
            excel = "24.xlsx"
            Aexcel = "A24.xlsx"
        if ShapeSelector == 25:
            excel = "25.xlsx"
            Aexcel = "A25.xlsx"
        if ShapeSelector == 26:
            excel = "26.xlsx"
            Aexcel = "A26.xlsx"
        if ShapeSelector == 27:
            excel = "27.xlsx"
            Aexcel = "A27.xlsx"
        if ShapeSelector == 28:
            excel = "28.xlsx"
            Aexcel = "A28.xlsx"
        if ShapeSelector == 29:
            excel = "29.xlsx"
            Aexcel = "A29.xlsx"
        if ShapeSelector == 30:
            excel = "30.xlsx"
            Aexcel = "A30.xlsx"
        if ShapeSelector == 31:
            excel = "31.xlsx"
            Aexcel = "A31.xlsx"
        if ShapeSelector == 32:
            excel = "32.xlsx"
            Aexcel = "A32.xlsx"
        if ShapeSelector == 33:
            excel = "33.xlsx"
            Aexcel = "A33.xlsx"
        if ShapeSelector == 34:
            excel = "34.xlsx"
            Aexcel = "A34.xlsx"
        if ShapeSelector == 35:
            excel = "35.xlsx"
            Aexcel = "A35.xlsx"
        if ShapeSelector == 36:
            excel = "36.xlsx"
            Aexcel = "A36.xlsx"
        if ShapeSelector == 37:
            excel = "37.xlsx"
            Aexcel = "A37.xlsx"
        if ShapeSelector == 38:
            excel = "38.xlsx"
            Aexcel = "A38.xlsx"
        if ShapeSelector == 39:
            excel = "39.xlsx"
            Aexcel = "A39.xlsx"
        if ShapeSelector == 40:
            excel = "40.xlsx"
            Aexcel = "A40.xlsx"
        if ShapeSelector == 41:
            excel = "41.xlsx"
            Aexcel = "A41.xlsx"
        if ShapeSelector == 42:
            excel = "42.xlsx"
            Aexcel = "A42.xlsx"
        if ShapeSelector == 43:
            excel = "43.xlsx"
            Aexcel = "A43.xlsx"
        if ShapeSelector == 44:
            excel = "44.xlsx"
            Aexcel = "A44.xlsx"
        if ShapeSelector == 45:
            excel = "45.xlsx"
            Aexcel = "A45.xlsx"
        if ShapeSelector == 46:
            excel = "46.xlsx"
            Aexcel = "A46.xlsx"
        if ShapeSelector == 47:
            excel = "47.xlsx"
            Aexcel = "A47.xlsx"
    CodeComponent Handed
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        HANDED2 = ' '
      Begin Routine:
        if Left1 == 'Match (A)':
            HANDED2 = "Standard"

        if Left1 == 'Mismatch (A)':
            HANDED2 = "Flipped"
    CodeComponent Record_CB
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        ERLloop = 0
        Break_text = ''
      Begin Routine:
        thisExp.addData('GMBM_Set',ShapeSelector)
        thisExp.addData('Positive_Order',TypeTaskFlip)
        thisExp.addData('Person_Task_Order',TyperCoinFlip)
        thisExp.addData('Buttons',HANDED2)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_45
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        if ShapeSelector == 0:
            Goodme = 'images/Circle.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'

        if ShapeSelector == 1:
            Goodme = 'images/Circle.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 2:
            Goodme = 'images/Circle.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 3:
            Goodme = 'images/Circle.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 4:
            Goodme = 'images/Circle.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 5:
            Goodme = 'images/Circle.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'

        if ShapeSelector == 6:
            Goodme = 'images/Circle.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Star.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 7:
            Goodme = 'images/Circle.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Star.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 8:
            Goodme = 'images/Circle.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'

        if ShapeSelector == 9:
            Goodme = 'images/Circle.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 10:
            Goodme = 'images/Circle.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'

        if ShapeSelector == 11:
            Goodme = 'images/Circle.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 12:
            Goodme = 'images/Star.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 13:
            Goodme = 'images/Star.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 14:
            Goodme = 'images/Star.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 15:
            Goodme = 'images/Star.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 16:
            Goodme = 'images/Star.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 17:
            Goodme = 'images/Star.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 18:
            Goodme = 'images/Star.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Circle.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 18:
            Goodme = 'images/Star.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Circle.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 19:
            Goodme = 'images/Star.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Circle.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 20:
            Goodme = 'images/Star.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 21:
            Goodme = 'images/Star.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 22:
            Goodme = 'images/Star.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Circle.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 23:
            Goodme = 'images/Star.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Circle.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 24:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 25:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 26:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Star.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 27:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Star.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 28:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 29:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Heptagon.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'

        if ShapeSelector == 30:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Circle.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 31:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Heptagon.png'
            Badother = 'images/Circle.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 32:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Star.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 33:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Star.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 34:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Circle.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 35:
            Goodme = 'images/Diamond.png'
            Badme = 'images/Heptagon.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Circle.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 36:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 37:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 38:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Star.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 39:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Circle.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Star.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 40:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 41:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Diamond.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 42:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Circle.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 43:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Star.png'
            Goodother = 'images/Diamond.png'
            Badother = 'images/Circle.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 44:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Star.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 45:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Circle.png'
            Badother = 'images/Star.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'


        if ShapeSelector == 46:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Circle.png'
            Left1 = 'Match (A)'
            Right1 = 'Mismatch (L)'


        if ShapeSelector == 47:
            Goodme = 'images/Heptagon.png'
            Badme = 'images/Diamond.png'
            Goodother = 'images/Star.png'
            Badother = 'images/Circle.png'
            Left1 = 'Mismatch (A)'
            Right1 = 'Match (L)'
    CodeComponent File_Selector_2
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        excel = ' '
        Aexcel = ''
      Begin Routine:
        if ShapeSelector == 0:
            excel = "0.csv"
            Aexcel = "A0.csv"
        if ShapeSelector == 1:
            excel = "1.csv"
            Aexcel = "A1.csv"
        if ShapeSelector == 2:
            excel = "2.csv"
            Aexcel = "A2.csv"
        if ShapeSelector == 3:
            excel = "3.csv"
            Aexcel = "A3.csv"
        if ShapeSelector == 4:
            excel = "4.csv"
            Aexcel = "A4.csv"
        if ShapeSelector == 5:
            excel = "5.csv"
            Aexcel = "A5.csv"
        if ShapeSelector == 6:
            excel = "6.csv"
            Aexcel = "A6.csv"
        if ShapeSelector == 7:
            excel = "7.csv"
            Aexcel = "A7.csv"
        if ShapeSelector == 8:
            excel = "8.csv"
            Aexcel = "A8.csv"
        if ShapeSelector == 9:
            excel = "9.csv"
            Aexcel = "A9.csv"
        if ShapeSelector == 10:
            excel = "10.csv"
            Aexcel = "A10.csv"
        if ShapeSelector == 11:
            excel = "11.csv"
            Aexcel = "A11.csv"
        if ShapeSelector == 12:
            excel = "12.csv"
            Aexcel = "A12.csv"
        if ShapeSelector == 13:
            excel = "13.csv"
            Aexcel = "A13.csv"
        if ShapeSelector == 14:
            excel = "14.csv"
            Aexcel = "A14.csv"
        if ShapeSelector == 15:
            excel = "15.csv"
            Aexcel = "A15.csv"
        if ShapeSelector == 16:
            excel = "16.csv"
            Aexcel = "A16.csv"
        if ShapeSelector == 17:
            excel = "17.csv"
            Aexcel = "A17.csv"
        if ShapeSelector == 18:
            excel = "18.csv"
            Aexcel = "A18.csv"
        if ShapeSelector == 19:
            excel = "19.csv"
            Aexcel = "A19.csv"
        if ShapeSelector == 20:
            excel = "20.csv"
            Aexcel = "A20.csv"
        if ShapeSelector == 21:
            excel = "21.csv"
            Aexcel = "A21.csv"
        if ShapeSelector == 22:
            excel = "22.csv"
            Aexcel = "A22.csv"
        if ShapeSelector == 23:
            excel = "23.csv"
            Aexcel = "A23.csv"
        if ShapeSelector == 24:
            excel = "24.csv"
            Aexcel = "A24.csv"
        if ShapeSelector == 25:
            excel = "25.csv"
            Aexcel = "A25.csv"
        if ShapeSelector == 26:
            excel = "26.csv"
            Aexcel = "A26.csv"
        if ShapeSelector == 27:
            excel = "27.csv"
            Aexcel = "A27.csv"
        if ShapeSelector == 28:
            excel = "28.csv"
            Aexcel = "A28.csv"
        if ShapeSelector == 29:
            excel = "29.csv"
            Aexcel = "A29.csv"
        if ShapeSelector == 30:
            excel = "30.csv"
            Aexcel = "A30.csv"
        if ShapeSelector == 31:
            excel = "31.csv"
            Aexcel = "A31.csv"
        if ShapeSelector == 32:
            excel = "32.csv"
            Aexcel = "A32.csv"
        if ShapeSelector == 33:
            excel = "33.csv"
            Aexcel = "A33.csv"
        if ShapeSelector == 34:
            excel = "34.csv"
            Aexcel = "A34.csv"
        if ShapeSelector == 35:
            excel = "35.csv"
            Aexcel = "A35.csv"
        if ShapeSelector == 36:
            excel = "36.csv"
            Aexcel = "A36.csv"
        if ShapeSelector == 37:
            excel = "37.csv"
            Aexcel = "A37.csv"
        if ShapeSelector == 38:
            excel = "38.csv"
            Aexcel = "A38.csv"
        if ShapeSelector == 39:
            excel = "39.csv"
            Aexcel = "A39.csv"
        if ShapeSelector == 40:
            excel = "40.csv"
            Aexcel = "A40.csv"
        if ShapeSelector == 41:
            excel = "41.csv"
            Aexcel = "A41.csv"
        if ShapeSelector == 42:
            excel = "42.csv"
            Aexcel = "A42.csv"
        if ShapeSelector == 43:
            excel = "43.csv"
            Aexcel = "A43.csv"
        if ShapeSelector == 44:
            excel = "44.csv"
            Aexcel = "A44.csv"
        if ShapeSelector == 45:
            excel = "45.csv"
            Aexcel = "A45.csv"
        if ShapeSelector == 46:
            excel = "46.csv"
            Aexcel = "A46.csv"
        if ShapeSelector == 47:
            excel = "47.csv"
            Aexcel = "A47.csv"
    CodeComponent Handed_2
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        HANDED2 = ' '
      Begin Routine:
        if Left1 == 'Match (A)':
            HANDED2 = "Standard"

        if Left1 == 'Mismatch (A)':
            HANDED2 = "Flipped"
    CodeComponent Record_CB_2
      Code Type = Auto->JS
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      Before Experiment:
        ERLloop = 0
        Break_text = ''

        import math
        import random
  Routine Initialiser
    CodeComponent scale
      Code Type = Auto->JS
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      Begin Experiment:
        scale = 0.1
  Routine DorH
    TextComponent cat_choice
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you have never had any pyschological disorder press 'H'

        If you currently or previously have suffered from a psychological or neurological disorder please press 'D'
    KeyboardComponent catresp
      allowedKeys = 'h','d'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Medicine
    TextComponent Medicine_Q
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you are on any psychiatric medication or intervention for depression please write it below. If you prefer not to say, please just leave it blank

        e.g., 10 mg escitalopram daily, 1 CBT session weekly
    TextboxComponent textbox_6
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Type here...
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    MouseComponent mouse
      clickable = Submit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent Submit
      image = submit.png
      pos = (.4, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine Psychomet_Intro
    TextComponent Qest_instruct
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The first part of this experiment will be a series of questionnaires.

        Press the number key associated with the answer to respond.

        [Press space to continue]
    KeyboardComponent Qest_instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BDI
    TextComponent Two_Week
      color = 0.3804, 0.7569, 0.8039
      letterHeight = 0.05
      pos = (-0.65, 0.46)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the last two weeks:
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    TextComponent BDIQ
      letterHeight = 0.05
      pos = (0,0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $BDI_Qest0
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    TextComponent text_20
      letterHeight = 0.05
      pos = (0,0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $BDI_Qest1
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    TextComponent text_21
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $BDI_Qest2
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    TextComponent text_22
      letterHeight = 0.05
      pos = (0,-0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $BDI_Qest3
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    KeyboardComponent BDISCORE
      allowedKeys = '0','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        if BDISCORE.keys == '0':
            thisExp.addData('BDIResult',0)
        if BDISCORE.keys == '1':
            thisExp.addData('BDIResult',1)
        if BDISCORE.keys == '2':
            thisExp.addData('BDIResult',2)
        if BDISCORE.keys == '3':
            thisExp.addData('BDIResult',3)
    CodeComponent BDITotter
      Code Type = Auto->JS
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      Begin Experiment:
        BDIT = 0
      End Routine:
        if BDISCORE.keys == '0':
            BDIT = (BDIT + 0)
        if BDISCORE.keys == '1':
            BDIT = (BDIT + 1)
        if BDISCORE.keys == '2':
            BDIT = (BDIT + 2)
        if BDISCORE.keys == '3':
            BDIT = (BDIT + 3)
    CodeComponent SubscaleBDI
      Code Type = Auto->JS
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      Begin Experiment:
        Cognitive_Total = 0
        Somatic_af_Total = 0
      End Routine:
        if BDISCORE.keys == '0' and factor == 'c':
            Cognitive_Total = (Cognitive_Total + 0)
        if BDISCORE.keys == '1' and factor == 'c':
            Cognitive_Total = (Cognitive_Total + 1)
        if BDISCORE.keys == '2' and factor == 'c':
            Cognitive_Total = (Cognitive_Total + 2)
        if BDISCORE.keys == '3' and factor == 'c':
            Cognitive_Total = (Cognitive_Total + 3)
        if BDISCORE.keys == '0' and factor == 's':
            Somatic_af_Total = (Somatic_af_Total + 0)
        if BDISCORE.keys == '1' and factor == 's':
            Somatic_af_Total = (Somatic_af_Total + 1)
        if BDISCORE.keys == '2' and factor == 's':
            Somatic_af_Total = (Somatic_af_Total + 2)
        if BDISCORE.keys == '3' and factor == 's':
            Somatic_af_Total = (Somatic_af_Total + 3)
  Routine Now_GAD
    TextComponent text_26
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The next set of questions will be about anxiety. Press SPACE to continue.
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    KeyboardComponent erespresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GAD7
    TextComponent text_14
      letterHeight = 0.05
      pos = (0,0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Over the last two weeks how often have you been bothered by the following problems?
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    TextComponent text_15
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $QuestionG
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    TextComponent text_16
      color = 1.0000, 0.8431, 0.6078
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0 - Not at all, 1 - several days, 2 - More than half the days, 3 - Nearly every day
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    KeyboardComponent GAD7SCORE
      allowedKeys [set every repeat] = '0','1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        if GAD7SCORE.keys == '0':
            thisExp.addData('GAD7Result',0)
        if GAD7SCORE.keys == '1':
            thisExp.addData('GAD7Result',1)
        if GAD7SCORE.keys == '2':
            thisExp.addData('GAD7Result',2)
        if GAD7SCORE.keys == '3':
            thisExp.addData('GAD7Result',3)
    CodeComponent GADTotter
      Code Type = Auto->JS
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      Begin Experiment:
        GADtot = 0
      End Routine:
        if GAD7SCORE.keys == '0':
            GADtot = (GADtot + 0)
        if GAD7SCORE.keys == '1':
            GADtot = (GADtot + 1)
        if GAD7SCORE.keys == '2':
            GADtot = (GADtot + 2)
        if GAD7SCORE.keys == '3':
            GADtot = (GADtot + 3)
  Routine Now_Rumination
    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The next set of questions will be about overthinking.

        (PRESS SPACE TO CONTINUE)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RSS
    TextComponent text_17
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please read the items below to see if and to what extent these thoughts and actions occur when you feel sad or depressed, and press the appropriate number.
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    TextComponent text_18
      color = 0.7412, 0.4431, 0.0588
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $RRSQ
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    TextComponent text_19
      color = 0.7412, 0.4431, 0.0588
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1 : never; 2 : sometimes; 3 : often; 4 : always

        Remember to answer according to your usual practice, rather than what you would like to do.
    KeyboardComponent RRSANSWER
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        if RRSANSWER.keys == '1':
            thisExp.addData('RRSResult',1)
        if RRSANSWER.keys == '2':
            thisExp.addData('RRSResult',2)
        if RRSANSWER.keys == '3':
            thisExp.addData('RRSResult',3)
        if RRSANSWER.keys == '4':
            thisExp.addData('RRSResult',4)
    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Experiment:
        RRStot = 0
      End Routine:
        if RRSANSWER.keys == '1':
            RRStot = (RRStot + 1)
        if RRSANSWER.keys == '2':
            RRStot = (RRStot + 2)
        if RRSANSWER.keys == '3':
            RRStot = (RRStot + 3)
        if RRSANSWER.keys == '4':
            RRStot = (RRStot + 4)
  Routine Ethical_Text
    TextComponent text_129
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You may have found some of the questions upsetting or be worried that you are experiencing symptoms of depression. You are encouraged to speak with your GP if you are concerned about your health.

        Alternatively you can call the Samiratans free 24/7/365 if you need someone to talk to. Just call 116 123 from any phone.

        Useful resources can also be found on Mind.org.uk

        If you no longer wish to take part in the experiment press [ESC] to exit, otherwise press [SPACE] to continue.
    KeyboardComponent key_resp_54
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine GMBM_Explain
    TextComponent GoodMeBadMeText
      color = 0.9608, 0.8824, 0.8039
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will learn to associate yourself 'You' with a shape

        You will also now learn to associate an unknown stranger 'Other' as a different shape.


        SPACE TO CONTINUE
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent GMBM
      Code Type = Auto->JS
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      Begin Routine:
        ShapeSelector = random.randint(0, 23)




        if ShapeSelector == 0:
            meshape = 'images/Circle.png'
            othershape = 'images/Diamond.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop1.xlsx'
            Xenia = 'S1.csv'

        if ShapeSelector == 1:
            meshape = 'images/Circle.png'
            othershape = 'images/Diamond.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop2.xlsx'
            Xenia = 'S2.csv'

        if ShapeSelector == 2:
            meshape = 'images/Circle.png'
            othershape = 'images/Star.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop3.xlsx'
            Xenia = 'S3.csv'

        if ShapeSelector == 3:
            meshape = 'images/Circle.png'
            othershape = 'images/Star.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop4.xlsx'
            Xenia = 'S4.csv'

        if ShapeSelector == 4:
            meshape = 'images/Circle.png'
            othershape = 'images/Triangle.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop5.xlsx'
            Xenia = 'S5.csv'

        if ShapeSelector == 5:
            meshape = 'images/Circle.png'
            othershape = 'images/Triangle.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop6.xlsx'
            Xenia = 'S6.csv'

        if ShapeSelector == 6:
            meshape = 'images/Diamond.png'
            othershape = 'images/Circle.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop7.xlsx'
            Xenia = 'S7.csv'

        if ShapeSelector == 7:
            meshape = 'images/Diamond.png'
            othershape = 'images/Circle.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop8.xlsx'
            Xenia = 'S8.csv'

        if ShapeSelector == 8:
            meshape = 'images/Diamond.png'
            othershape = 'images/Star.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop9.xlsx'
            Xenia = 'S9.csv'

        if ShapeSelector == 9:
            meshape = 'images/Diamond.png'
            othershape = 'images/Star.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop10.xlsx'
            Xenia = 'S10.csv'

        if ShapeSelector == 10:
            meshape = 'images/Diamond.png'
            othershape = 'images/Triangle.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop11.xlsx'
            Xenia = 'S11.csv'

        if ShapeSelector == 11:
            meshape = 'images/Diamond.png'
            othershape = 'images/Triangle.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop12.xlsx'
            Xenia = 'S12.csv'

        if ShapeSelector == 12:
            meshape = 'images/Star.png'
            othershape = 'images/Circle.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop13.xlsx'
            Xenia = 'S13.csv'

        if ShapeSelector == 13:
            meshape = 'images/Star.png'
            othershape = 'images/Circle.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop14.xlsx'
            Xenia = 'S14.csv'

        if ShapeSelector == 14:
            meshape = 'images/Star.png'
            othershape = 'images/Diamond.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop15.xlsx'
            Xenia = 'S15.csv'

        if ShapeSelector == 15:
            meshape = 'images/Star.png'
            othershape = 'images/Diamond.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop16.xlsx'
            Xenia = 'S16.csv'

        if ShapeSelector == 16:
            meshape = 'images/Star.png'
            othershape = 'images/Triangle.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop17.xlsx'
            Xenia = 'S17.csv'

        if ShapeSelector == 17:
            meshape = 'images/Star.png'
            othershape = 'images/Triangle.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop18.xlsx'
            Xenia = 'S18.csv'

        if ShapeSelector == 18:
            meshape = 'images/Triangle.png'
            othershape = 'images/Circle.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop19.xlsx'
            Xenia = 'S19.csv'

        if ShapeSelector == 19:
            meshape = 'images/Triangle.png'
            othershape = 'images/Circle.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop20.xlsx'
            Xenia = 'S20.csv'

        if ShapeSelector == 20:
            meshape = 'images/Triangle.png'
            othershape = 'images/Diamond.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop21.xlsx'
            Xenia = 'S21.csv'

        if ShapeSelector == 21:
            meshape = 'images/Triangle.png'
            othershape = 'images/Diamond.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop22.xlsx'
            Xenia = 'S22.csv'

        if ShapeSelector == 22:
            meshape = 'images/Triangle.png'
            othershape = 'images/Star.png'
            Left1 = 'Match'
            Right1 = 'Mismatch'
            prac = 'Pracloop23.xlsx'
            Xenia = 'S23.csv'

        if ShapeSelector == 23:
            meshape = 'images/Triangle.png'
            othershape = 'images/Star.png'
            Left1 = 'Mismatch'
            Right1 = 'Match'
            prac = 'Pracloop24.xlsx'
            Xenia = 'S24.csv'
    CodeComponent CB_attrib
      Code Type = Auto->JS
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      End Routine:
        if Left1 == 'Match':
            HANDED2 = "Standard"

        if Left1 == 'Mismatch':
            HANDED2 = "Flipped"

        thisExp.addData('GMBM_Set',ShapeSelector)

        thisExp.addData('Buttons',HANDED2)
    CodeComponent code_63
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        print(ShapeSelector)
        print(Goodme)
        print(Badme)
        print(Goodother)
        print(Badother)
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
  Routine NomenAssoc
    ImageComponent image_7
      image [set every repeat] = $othershape
      pos = (-.3, .2)
      size = (3*scale,3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_47
      letterHeight = 0.05
      pos = (0.3, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = = Stranger
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_49
      letterHeight = 0.05
      pos = (0, -.38)
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine MeAssoc
    ImageComponent image_13
      image [set every repeat] = $meshape
      pos = (-.3, .2)
      size = (3*scale,3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_50
      letterHeight = 0.05
      pos = (0.3, .2)
      startVal [time (s)] = 0.0
      text = = You
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_52
      letterHeight = 0.05
      pos = (0, -.38)
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine PracticeGoodText
    TextComponent text_37
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Lets start with a practice to make sure you have learnt the right associations.

        This practice loop will end when you get all possible matched and mismatched combinations correct.

        SPACE TO CONTINUE
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine TASK_INSTRUCTIONS9
    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Routine:
        if Left1 == 'Match':
            Instext2 = "Your task is to judge whether the shape and the person match in each display\n Press 'X' if the shape and person match\n Press 'Y' if the shape and the person do not match.\n Please respond AS QUICKLY AND ACCURATELY AS POSSIBLE\n SPACE to start"

        if Left1 == 'Mismatch':
            Instext2 = "Your task is to judge whether the shape and the person match in each display\n Press 'Y' if the shape and person match\n Press 'X' if the shape and the person do not match.\n Please respond AS QUICKLY AND ACCURATELY AS POSSIBLE\n SPACE to start"
    TextComponent text_100
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instext2
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    KeyboardComponent key_resp_40
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine Count_down
    TextComponent text_72
      color [set every repeat] = $ccolor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $numberC
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
  Routine DONE_GMBM
    TextComponent text_126
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Congratulations, you have completed this part of the experiment.

        Press SPACE to continue
    KeyboardComponent key_resp_51
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ERL
    ImageComponent Left_shape
      image [set every repeat] = $left
      pos = (-.5, 0)
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent Right_shape
      image [set every repeat] = $right
      pos = (.5, 0)
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent Tilted_line
      image [set every repeat] = $tilt
      pos [set every repeat] = [tiltposx,tiltposy]
      size = (0.5*scale, 0.5*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent Horizontal_line
      image = images/V_line.png
      pos [set every repeat] = [dposx,dposy]
      size = (0.5*scale, 0.5*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    KeyboardComponent Answer
      allowedKeys = '1','4'
      correctAns = $corkey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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    TextComponent Crux
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if Answer.keys == "a":
            ERLloop = (ERLloop + 1)
        if Answer.keys == "l":
            ERLloop = (ERLloop + 1)
  Routine Feedback_ERL
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if Answer.corr:
            msg='Correct!'
            msgColor = "green"
        elif not Answer.keys:
            msg='Too slow'
            msgColor= "yellow"
        else:
            msg='Incorrect'
            msgColor = "red"
    TextComponent Fodeback
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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  Routine Test
    CodeComponent code_51
      Code Type = Auto->JS
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      Begin Routine:
        # Set the probability of running the routine (20%)
        probability_of_running = 0.2

        # Determine whether to run the routine on this trial
        run_task_routine = random.random() < probability_of_running

        if not run_task_routine:
            continueRoutine = False  # Skip the routine if the condition is false
    CodeComponent code_17
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        if logos == 'Good me':
              text_13.text = 'Good Me'

        if logos == 'Bad me':
              text_13.text = 'Bad Me'

        if logos == 'Good Other':
              text_13.text = str('Good' + ' ' + Nomen)

        if logos == 'Bad Other':
              text_13.text = str('Bad' + ' ' + Nomen)
    KeyboardComponent Test_answer
      allowedKeys = 'a','l'
      correctAns = $corkey2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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    TextComponent text_5
      letterHeight = 0.05
      pos = (-.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = (A) = Yes
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The shape in the cue represented was:
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $logos
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    TextComponent text_23
      letterHeight = 0.05
      pos = (.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = (L) = No
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  Routine Test_feedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if Test_answer.corr:
            msg='Correct!'
            msgColor = "green"
        elif not Test_answer.keys:
            msg='Too slow'
            msgColor= "yellow"
        else:
            msg='Incorrect'
            msgColor = "red"
    TextComponent text_6
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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    CodeComponent Rez
      Code Type = Auto->JS
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      Begin Routine:
        if not run_task_routine:
            continueRoutine = False  # Skip the routine if the task routine was skipped
      End Routine:
        thisExp.addData('Congruence',corkey2)
        thisExp.addData('Cor3',Test_answer.corr)
        thisExp.addData('RT3',Test_answer.rt)
  Routine ERL_Break_Text
    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 214:
            continueRoutine = False
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if ERLloop == 214:
            Break_text = "You have completed approximately 10 minutes of this experiment.\n Take a break if you would like.\n You have 35 minutes left\n Press SPACE when you are ready to continue"
    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Break_text
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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
  Routine ERL_Me_Assoc_2
    CodeComponent B_Code_13
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 214:
            continueRoutine = False
    ImageComponent image_41
      image [set every repeat] = $Goodme
      pos = (-.3, .2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    ImageComponent image_42
      image [set every repeat] = $Badme
      pos = (-.3, -.2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_127
      letterHeight = 0.05
      pos = (0.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"=" + "Good" +" "+ "Me"
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    TextComponent text_128
      letterHeight = 0.05
      pos = (0.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"=" + "Bad" +" "+ "Me"
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    KeyboardComponent key_resp_52
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_130
      letterHeight = 0.05
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine ERL_Nomen_Assoc_2
    CodeComponent B_Code_14
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 214:
            continueRoutine = False
    ImageComponent image_43
      image [set every repeat] = $Goodother
      pos = (-.3, .2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    ImageComponent image_44
      image [set every repeat] = $Badother
      pos = (-.3, -.2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_131
      letterHeight = 0.05
      pos = (0.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"=" + " " + "Good" +" "+ Nomen
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    TextComponent text_132
      letterHeight = 0.05
      pos = (0.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"=" + " " + "Bad" +" "+ Nomen
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    KeyboardComponent key_resp_53
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_133
      letterHeight = 0.05
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine ERL_CD
    CodeComponent B_Code_15
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 214:
            continueRoutine = False
    TextComponent text_134
      color [set every repeat] = $ccolor
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $numberC
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
  Routine ERL_Break_Text_2
    CodeComponent code_13
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 429:
            continueRoutine = False
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if ERLloop == 429:
            Break_text = "You have completed approximately 20 minutes of this experiment.\n Take a break if you would like.\n You have 25 minutes left\n Press SPACE when you are ready to continue"
    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Break_text
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine ERL_Me_Assoc_3
    CodeComponent B_Code_16
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 429:
            continueRoutine = False
    ImageComponent image_45
      image [set every repeat] = $Goodme
      pos = (-.3, .2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    ImageComponent image_46
      image [set every repeat] = $Badme
      pos = (-.3, -.2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_135
      letterHeight = 0.05
      pos = (0.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"=" + "Good" +" "+ "Me"
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    TextComponent text_136
      letterHeight = 0.05
      pos = (0.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"=" + "Bad" +" "+ "Me"
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    KeyboardComponent key_resp_55
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_137
      letterHeight = 0.05
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine ERL_Nomen_Assoc_3
    CodeComponent B_Code_17
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 429:
            continueRoutine = False
    ImageComponent image_47
      image [set every repeat] = $Goodother
      pos = (-.3, .2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    ImageComponent image_48
      image [set every repeat] = $Badother
      pos = (-.3, -.2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_138
      letterHeight = 0.05
      pos = (0.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"=" + " " + "Good" +" "+ Nomen
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    TextComponent text_139
      letterHeight = 0.05
      pos = (0.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"=" + " " + "Bad" +" "+ Nomen
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    KeyboardComponent key_resp_56
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_140
      letterHeight = 0.05
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine ERL_CD_2
    CodeComponent B_Code_18
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 429:
            continueRoutine = False
    TextComponent text_141
      color [set every repeat] = $ccolor
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $numberC
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  Routine ERL_Break_Text_3
    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 643:
            continueRoutine = False
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if ERLloop == 643:
            Break_text = "You have completed approximately 30 minutes of this experiment.\n Take a break if you would like.\n You have 15 minutes left\n Press SPACE when you are ready to continue"
    TextComponent text_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Break_text
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine ERL_Me_Assoc_4
    CodeComponent B_Code_19
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 643:
            continueRoutine = False
    ImageComponent image_49
      image [set every repeat] = $Goodme
      pos = (-.3, .2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    ImageComponent image_50
      image [set every repeat] = $Badme
      pos = (-.3, -.2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_142
      letterHeight = 0.05
      pos = (0.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"=" + "Good" +" "+ "Me"
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    TextComponent text_143
      letterHeight = 0.05
      pos = (0.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"=" + "Bad" +" "+ "Me"
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    KeyboardComponent key_resp_57
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_144
      letterHeight = 0.05
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine ERL_Nomen_Assoc_4
    CodeComponent B_Code_20
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 643:
            continueRoutine = False
    ImageComponent image_51
      image [set every repeat] = $Goodother
      pos = (-.3, .2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    ImageComponent image_52
      image [set every repeat] = $Badother
      pos = (-.3, -.2)
      saveStartStop = False
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
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    TextComponent text_145
      letterHeight = 0.05
      pos = (0.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"=" + " " + "Good" +" "+ Nomen
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    TextComponent text_146
      letterHeight = 0.05
      pos = (0.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"=" + " " + "Bad" +" "+ Nomen
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    KeyboardComponent key_resp_58
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_147
      letterHeight = 0.05
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SPACE TO CONTINUE
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  Routine ERL_CD_3
    CodeComponent B_Code_21
      Code Type = Auto->JS
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      Each Frame:
        if ERLloop != 643:
            continueRoutine = False
    TextComponent text_148
      color [set every repeat] = $ccolor
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $numberC
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  Routine END
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Congratulation! you have completed the experiment.

        PLEASE make sure you press SPACE to finish.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Learning_intro
    TextComponent text_34
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You will now learn how the task works through a training version which is slower than the actual task so you can get used to it.

        Your goal is to indicate if the tilted line is tilted to the left or the right.

        If it is tilted to the LEFT press X.

        If it is tilted to the RIGHT press Y.


        The lines will be superimposed onto some of the shapes from the previous task.

        You will be asked to remember a meaningful shape, and occasionally quizzed on what that shape represented to ensure you are keeping it in your memory.


        These shapes are task irrelevant.

        Press SPACE to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent LeftTiltEx
      image = images/L_tilt.png
      pos = (-0.64, 0)
      size = (3*scale,3*scale)
      startVal [time (s)] = 0.0
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    ImageComponent RightTiltEx
      image = images/R_tilt.png
      pos = (0.64, 0)
      size = (3*scale,3*scale)
      startVal [time (s)] = 0.0
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    TextComponent A_text
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.64, -.1)
      startVal [time (s)] = 0.0
      text = (X)
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    TextComponent L_text
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.64, -0.1)
      startVal [time (s)] = 0.0
      text = (Y)
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  Routine Cue_WM
    ImageComponent image_4
      image [set every repeat] = $thepresentshape
      pos = (0, 0.2)
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent Crux_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_40
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = Remember this shape
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    CodeComponent code_32
      Code Type = Auto->JS
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      End Routine:
        circleSize = 0.3
  Routine Crucem_WM
    CodeComponent code_55
      Code Type = Auto->JS
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      Each Frame:
        if polygon_2.size[0] > 0:
            circleSize -= 0.03333333333;
    CodeComponent code_54
      Code Type = JS
      Begin JS Routine:
        expansionFrames = 15;
        expansionDegrees = 18;
        expansionRate = expansionDegrees / expansionFrames
    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $SCTime
      text [set every repeat] = +
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    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        SCTime = math.floor(random.random() * 201 + 500) / 1000
    CodeComponent Circle_JS_2
      Code Type = JS
      disabled = True
      Begin JS Routine:
        // Define the function to run the experiment
        function runExperiment() {
          // Create a window
          const win = new psychoJS.visual.Window();

          // Define the scale and shrinking duration
          const scale = 1;
          const shrinking_duration = 0.5;

          // Calculate the number of frames
          const frames = Math.floor(shrinking_duration * win.getActualFrameRate());

          // Create the circle stimulus
          const circle = new psychoJS.visual.Circle({
            win: win,
            units: 'pix',
            radius: 3 * scale,
            fillColor: 'white',
            lineColor: null,
            opacity: 0.5,
            pos: [0, 0]
          });
      Each JS Frame:
         // Animation loop
          let frame_counter = 0;
          function update() {
            if (frame_counter < frames) {
              // Decrease the circle radius
              circle.radius = (3 * scale) * (1 - frame_counter / frames);

              // Draw the circle
              circle.draw();

              // Update the window
              win.flip();

              // Increment the frame counter
              frame_counter += 1;
            }

            // Request the next frame
            win.requestAnimationFrame(update);
          }

          // Start the animation loop
          update();
        }
    PolygonComponent polygon_2
      fillColor = -0.7333, 0.0902, -0.7333
      lineColor = -0.7333, 0.0902, -0.7333
      opacity = 0.3
      saveStartStop = False
      shape = circle
      size [set every frame] = (circleSize, circleSize)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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  Routine SAVER_WM
    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Task2',task)
        thisExp.addData('Validity2',validity)
        thisExp.addData('Cor2',Answer.corr)
        thisExp.addData('RT2',Answer.rt)
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
  Routine pre
    CodeComponent code_43
      Code Type = JS
      disabled = True
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      Before JS Experiment:
        let ShapeSelector;
        ShapeSelector = 0;
        let TheWord;

        let Goodme = "";
        let Badme = "";
        let Goodother = "";
        let Badother = "";

        Goodme = "";
        Badme = "";
        Goodother = "";
        Badother = "";




        let POSFIRST;
        let POSSECOND;
        let TyperPosFirst;
        let TyperPosSecond;
        let TypeTaskFlip;
        let TyperCoinFlip;

        POSFIRST = 0;
        POSSECOND = 0;
        TyperPosFirst = 0;
        TyperPosSecond = 0;
        TypeTaskFlip = 0;
        TyperCoinFlip = 0;



        let G_me_RT_Matched;
        let G_me_RT_Mismatched;
        let B_me_RT_Matched;
        let B_me_RT_Mismatched;
        let G_other_RT_Matched;
        let G_other_RT_Mismatched;
        let B_other_RT_Matched;
        let B_other_RT_Mismatched;
        let G_me_TOTTER_Matched;
        let G_me_TOTTER_Mismatched;
        let B_me_TOTTER_Matched;
        let B_me_TOTTER_Mismatched;
        let G_other_TOTTER_Matched;
        let G_other_TOTTER_Mismatched;
        let B_other_TOTTER_Matched;
        let B_other_TOTTER_Mismatched;
        let G_me_CORR_Matched;
        let G_me_CORR_Mismatched;
        let B_me_CORR_Matched;
        let B_me_CORR_Mismatched;
        let G_other_CORR_Matched;
        let G_other_CORR_Mismatched;
        let B_other_CORR_Matched;
        let B_other_CORR_Mismatched;


        let score;





        G_me_RT_Matched = 0;
        G_me_RT_Mismatched = 0;
        B_me_RT_Matched = 0;
        B_me_RT_Mismatched = 0;
        G_other_RT_Matched = 0;
        G_other_RT_Mismatched = 0;
        B_other_RT_Matched = 0;
        B_other_RT_Mismatched = 0;
        G_me_TOTTER_Matched = 0;
        G_me_TOTTER_Mismatched = 0;
        B_me_TOTTER_Matched = 0;
        B_me_TOTTER_Mismatched = 0;
        G_other_TOTTER_Matched = 0;
        G_other_TOTTER_Mismatched = 0;
        B_other_TOTTER_Matched = 0;
        B_other_TOTTER_Mismatched = 0;
        G_me_CORR_Matched = 0;
        G_me_CORR_Mismatched = 0;
        B_me_CORR_Matched = 0;
        B_me_CORR_Mismatched = 0;
        G_other_CORR_Matched = 0;
        G_other_CORR_Mismatched = 0;
        B_other_CORR_Matched = 0;
        B_other_CORR_Mismatched = 0;




        let scale;
        let LoopnumJS2;

        let ERLloop2;

        let Left1;
        let Right1;

        let excel;
        let Aexcel;

        let HANDED2;

        let BDIT;

        let Cognitive_Total;
        let Somatic_af_Total;

        let GADtot;
        let RRStot;

        let Instext2;
        let score1;
    CodeComponent code_44
      Code Type = Auto->JS
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      Begin Experiment:
        TheWord = ""
        Goodme = ''
        Badme= ''
        Goodother =''
        Badother = ''
        ShapeSelector = 0
        POSFIRST = 0
        POSSECOND = 0
        TyperPosFirst = 0
        TyperPosSecond = 0
        TypeTaskFlip = 0
        TyperCoinFlip = 0
        G_me_RT_Matched = 0
        G_me_RT_Mismatched = 0
        B_me_RT_Matched = 0
        B_me_RT_Mismatched = 0
        G_other_RT_Matched = 0
        G_other_RT_Mismatched = 0
        B_other_RT_Matched = 0
        B_other_RT_Mismatched = 0
        G_me_TOTTER_Matched = 0
        G_me_TOTTER_Mismatched = 0
        B_me_TOTTER_Matched = 0
        B_me_TOTTER_Mismatched = 0
        G_other_TOTTER_Matched = 0
        G_other_TOTTER_Mismatched = 0
        B_other_TOTTER_Matched = 0
        B_other_TOTTER_Mismatched = 0
        G_me_CORR_Matched = 0
        G_me_CORR_Mismatched = 0
        B_me_CORR_Matched = 0
        B_me_CORR_Mismatched = 0
        G_other_CORR_Matched = 0
        G_other_CORR_Mismatched = 0
        B_other_CORR_Matched = 0
        B_other_CORR_Mismatched = 0
        score = 0
        scale = 0
        LoopnumJS2 = 0
        ERLloop2 = 0
        Left1 = ''
        Right1 = ''
        excel = 0
        Aexcel = 0
        HANDED2 = 0
        BDIT = 0
        Cognitive_Total = 0
        Somatic_af_Total = 0
        GADtot = 0
        RRStot = 0
        Instext2 = 0
        score1 = 0

        Xenia = 0
        Prac = 0

        meshape = ''

        othershape = ''

        shapes_images = ''

        shape_label = ''

        msg = ''

        msgColor = ''

        GMtotal_acc = 0

        thepresentshape = ''
    CodeComponent code_50
      Code Type = JS
      disabled = True
      Before JS Experiment:
        function convertStringToNumbers(stringValue) {
          // Removing any whitespace from the string value
          stringValue = stringValue.replace(/\s/g, '');

          // Splitting the string by comma and extracting the two number values
          var numbers = stringValue.split(',');

          // Parsing the individual number strings into number values
          var number1 = parseFloat(numbers[0]);
          var number2 = parseFloat(numbers[1]);

          // Returning the converted numbers
          return [number1, number2];
        }
  Routine Cue_WM_2
    ImageComponent image_5
      image [set every repeat] = $thepresentshape
      pos = (0, 0.2)
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent Crux_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent text_42
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Remember this shape
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    CodeComponent code_56
      Code Type = Auto->JS
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      End Routine:
        circleSize = 0.3
  Routine ERL_3
    ImageComponent Left_shape_3
      image [set every repeat] = $left
      pos = (-.5, 0)
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Right_shape_3
      image [set every repeat] = $right
      pos = (.5, 0)
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Tilted_line_3
      image [set every repeat] = $tilt
      pos [set every repeat] = [tiltposx,tiltposy]
      size = (0.5*scale, 0.5*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Horizontal_line_3
      image = images/V_line.png
      pos [set every repeat] = [dposx,dposy]
      size = (0.5*scale, 0.5*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Answer_3
      allowedKeys = '1','4'
      correctAns = $corkey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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    TextComponent Crux_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_57
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        if Answer.keys == "a":
            ERLloop = (ERLloop + 1)
        if Answer.keys == "l":
            ERLloop = (ERLloop + 1)

        if Answer.keys == "a":
            ERLloop = (ERLloop2 + 1)
        if Answer.keys == "l":
            ERLloop = (ERLloop2 + 1)
  Routine Feedback_ERL_3
    CodeComponent code_58
      Code Type = Auto->JS
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      Begin Routine:
        if Answer_3.corr:
            msg='Correct!'
            msgColor = "green"
        elif not Answer_3.keys:
            msg='Too slow'
            msgColor= "yellow"
        else:
            msg='Incorrect'
            msgColor = "red"
    TextComponent Fodeback_3
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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  Routine Test_3
    CodeComponent code_59
      Code Type = Auto->JS
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      Begin Routine:
        # Set the probability of running the routine (20%)
        probability_of_running = 0.2

        # Determine whether to run the routine on this trial
        run_task_routine = random.random() < probability_of_running

        if not run_task_routine:
            continueRoutine = False  # Skip the routine if the condition is false
    CodeComponent code_60
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        if logos == 'Good me':
              text_45.text = 'Good Me'

        if logos == 'Bad me':
              text_45.text = 'Bad Me'

        if logos == 'Good Other':
              text_45.text = str('Good' + ' ' + Nomen)

        if logos == 'Bad Other':
              text_45.text = str('Bad' + ' ' + Nomen)
    KeyboardComponent Test_answer_3
      allowedKeys = 'a','l'
      correctAns = $corkey2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    TextComponent text_43
      letterHeight = 0.05
      pos = (-.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = (X) = Yes
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    TextComponent text_44
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The shape in the cue represented was:
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    TextComponent text_45
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $logos
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    TextComponent text_46
      letterHeight = 0.05
      pos = (.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = (Y) = No
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  Routine Test_feedback_3
    CodeComponent code_61
      Code Type = Auto->JS
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      Begin Routine:
        if Test_answer_3.corr:
            msg='Correct!'
            msgColor = "green"
        elif not Test_answer_3.keys:
            msg='Too slow'
            msgColor= "yellow"
        else:
            msg='Incorrect'
            msgColor = "red"
    TextComponent text_54
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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    CodeComponent Rez_2
      Code Type = Auto->JS
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      Begin Routine:
        if not run_task_routine:
            continueRoutine = False  # Skip the routine if the task routine was skipped
      End Routine:
        thisExp.addData('Congruence',corkey2)
        thisExp.addData('Cor3',Test_answer.corr)
        thisExp.addData('RT3',Test_answer.rt)
  Routine Now_it_real
    TextComponent text_55
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will start the actual task

        It will be the same as training but faster

        [Press SPACE to continue]
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine New_prac
    ImageComponent TheShape
      image [set every repeat] = $shapes_images
      pos = (0, 0.2)
      size = (3*scale, 3*scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent Person
      letterHeight = 0.05
      pos = (0,-.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $shape_label
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    TextComponent Praccross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = +
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    TextComponent Left_button
      letterHeight = 0.05
      pos = (-.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $Left1
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    TextComponent Right_button
      letterHeight = 0.05
      pos = (0.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $Right1
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    KeyboardComponent Prac_resp
      allowedKeys = '1','4',
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine New_feedback
    CodeComponent code_65
      Code Type = Auto->JS
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      Begin Routine:
        if Prac_resp.corr == 1:
            msg = "Correct!"
            msgColor = "green"
        elif not Prac_resp.keys:
            msg = "Too slow"
            msgColor = "yellow"
        else:
            msg = "Incorrect"
            msgColor = "red"
    CodeComponent code_72
      Code Type = Auto->JS
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      End Routine:
        if (Prac_resp.corr == 1):
            GMtotal_acc = GMtotal_acc + 1
        else:
            GMtotal_acc = 0

        if (GMtotal_acc >= 16):
            trials_29.finished = True; skipThisTrial = True; continueRoutine = False;
    TextComponent text_56
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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
Flow
  Routine pre
  Routine Medicine
  Routine Initialiser
  Routine trial
  Routine DorH
  Routine Psychomet_Intro
  LoopInitiator BDI_Loop loopType="TrialHandler"
    conditionsFile = BDI.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'QuestionNo': 1, 'BDI_Qest0': '0 I do not feel sad.\n', 'BDI_Qest1': '1 I feel sad\n', 'BDI_Qest2': "2 I am sad all the time and I can't snap out of it.\n", 'BDI_Qest3': "3 I am so sad and unhappy that I can't stand it. ", 'factor': 'c'},
      {'QuestionNo': 2, 'BDI_Qest0': '0 I am not particularly discouraged about the future.', 'BDI_Qest1': '1 I feel discouraged about the future.', 'BDI_Qest2': '2 I feel I have nothing to look forward to.', 'BDI_Qest3': '3 I feel the future is hopeless and that things cannot improve.', 'factor': 'c'},
      {'QuestionNo': 3, 'BDI_Qest0': '0 I do not feel like a failure.', 'BDI_Qest1': ' 1 I feel I have failed more than the average person.', 'BDI_Qest2': ' 2 As I look back on my life, all I can see is a lot of failures.', 'BDI_Qest3': ' 3 I feel I am a complete failure as a person.', 'factor': 'c'},
      {'QuestionNo': 4, 'BDI_Qest0': '0 I get as much satisfaction out of things as I used to.', 'BDI_Qest1': " 1 I don't enjoy things the way I used to.", 'BDI_Qest2': " 2 I don't get real satisfaction out of anything anymore.", 'BDI_Qest3': ' 3 I am dissatisfied or bored with everything.', 'factor': 's'},
      {'QuestionNo': 5, 'BDI_Qest0': "0 I don't feel particularly guilty", 'BDI_Qest1': ' 1 I feel guilty a good part of the time.', 'BDI_Qest2': ' 2 I feel quite guilty most of the time. ', 'BDI_Qest3': '3 I feel guilty all of the time.', 'factor': 'c'}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
    Routine BDI
  LoopTerminator BDI_Loop
  Routine Now_GAD
  LoopInitiator GAD_Loop loopType="TrialHandler"
    conditionsFile = GAD7.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'QuestionG': 'Feeling nervous, anxious, or on edge'},
      {'QuestionG': 'Not being able to stop or control worrying'},
      {'QuestionG': 'Worrying too much about different things'},
      {'QuestionG': 'Trouble relaxing'},
      {'QuestionG': "Being so restless that it's hard to sit still"},
      {'QuestionG': 'Becoming easily annoyed or irritable'},
      {'QuestionG': 'Feeling afraid as if something awful might happen'}]
    Routine GAD7
  LoopTerminator GAD_Loop
  Routine Now_Rumination
  LoopInitiator RRS_Loop loopType="TrialHandler"
    conditionsFile = RRS.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'RRSQ': 'Think "Why do I always react this way?"'},
      {'RRSQ': 'Think "Why can\'t I handle things better?"'},
      {'RRSQ': 'Think "What am I doing to deserve this?"'},
      {'RRSQ': 'Think about a recent situation, wishing it had gone better'},
      {'RRSQ': 'Analyze your personality to try and understand why you are depressed.'},
      {'RRSQ': 'Analyze recent events to try and understand why you are depressed.'},
      {'RRSQ': 'Go away by yourself and think about why you feel this way'},
      {'RRSQ': 'Write down what you are thinking and analyse it.'},
      {'RRSQ': 'Go someplace alone to think about your feelings.'},
      {'RRSQ': 'Think "Why do I have this problem and others don\'t."'}]
    Routine RSS
  LoopTerminator RRS_Loop
  Routine Ethical_Text
  Routine GMBM_Explain
  Routine NomenAssoc
  Routine MeAssoc
  Routine PracticeGoodText
  Routine MeAssoc
  Routine NomenAssoc
  Routine MeAssoc
  Routine NomenAssoc
  Routine MeAssoc
  Routine NomenAssoc
  Routine TASK_INSTRUCTIONS9
  LoopInitiator trials_29 loopType="TrialHandler"
    conditionsFile = $prac
    loopType = random
    nReps = 900
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    Routine New_prac
    Routine New_feedback
  LoopTerminator trials_29
  Routine DONE_GMBM
  Routine Learning_intro
  Routine MeAssoc
  Routine NomenAssoc
  Routine MeAssoc
  Routine NomenAssoc
  LoopInitiator trials_20 loopType="TrialHandler"
    conditionsFile = countdown.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'numberC': 3, 'ccolor': 'red'},
      {'numberC': 2, 'ccolor': 'orange'},
      {'numberC': 1, 'ccolor': 'green'}]
    Routine Count_down
  LoopTerminator trials_20
  LoopInitiator trials_23 loopType="TrialHandler"
    Selected rows = 0:5, 20:25, 35:40, 50:55, 70:75, 90:95
    conditionsFile = $Xenia
    isTrials = False
    loopType = random
    nReps = 1
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    Routine Cue_WM_2
    Routine Crucem_WM
    Routine ERL_3
    Routine Feedback_ERL_3
    Routine Test_3
    Routine Test_feedback_3
  LoopTerminator trials_23
  Routine Now_it_real
  Routine MeAssoc
  Routine NomenAssoc
  Routine MeAssoc
  Routine NomenAssoc
  LoopInitiator trials_24 loopType="TrialHandler"
    conditionsFile = countdown.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'numberC': 3, 'ccolor': 'red'},
      {'numberC': 2, 'ccolor': 'orange'},
      {'numberC': 1, 'ccolor': 'green'}]
    Routine Count_down
  LoopTerminator trials_24
  LoopInitiator trials_22 loopType="TrialHandler"
    conditionsFile = $Aexcel
    loopType = random
    nReps = 5
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    Routine Cue_WM
    Routine Crucem_WM
    Routine ERL
    Routine Feedback_ERL
    Routine SAVER_WM
    Routine Test
    Routine Test_feedback
    Routine ERL_Break_Text
    Routine ERL_Me_Assoc_2
    Routine ERL_Nomen_Assoc_2
    Routine ERL_Me_Assoc_2
    Routine ERL_Nomen_Assoc_2
    LoopInitiator trials_19 loopType="TrialHandler"
      conditionsFile = countdown.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'numberC': 3, 'ccolor': 'red'},
        {'numberC': 2, 'ccolor': 'orange'},
        {'numberC': 1, 'ccolor': 'green'}]
      Routine ERL_CD
    LoopTerminator trials_19
    Routine ERL_Break_Text_2
    Routine ERL_Me_Assoc_3
    Routine ERL_Nomen_Assoc_3
    Routine ERL_Me_Assoc_3
    Routine ERL_Nomen_Assoc_3
    LoopInitiator trials_21 loopType="TrialHandler"
      conditionsFile = countdown.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'numberC': 3, 'ccolor': 'red'},
        {'numberC': 2, 'ccolor': 'orange'},
        {'numberC': 1, 'ccolor': 'green'}]
      Routine ERL_CD_2
    LoopTerminator trials_21
    Routine ERL_Break_Text_3
    Routine ERL_Me_Assoc_4
    Routine ERL_Nomen_Assoc_4
    Routine ERL_Me_Assoc_4
    Routine ERL_Nomen_Assoc_4
    LoopInitiator trials_25 loopType="TrialHandler"
      conditionsFile = countdown.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'numberC': 3, 'ccolor': 'red'},
        {'numberC': 2, 'ccolor': 'orange'},
        {'numberC': 1, 'ccolor': 'green'}]
      Routine ERL_CD_3
    LoopTerminator trials_25
  LoopTerminator trials_22
  Routine END
